PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': '', 'Group': '001', 'Stimuli1': "['A', 'B']", 'Stimuli2': "['A', 'B']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Use version = latest
  Window size (pixels) = [1536, 864]
  color = $[0.208,0.208,0.208]
  expName = SGPV_Interaction
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Routines
  Routine Start
    TextComponent start_text_m1
      color = $[-1.000,-1.000,-1.000]
      font = Comic Sans
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you for offering to take part in this experiment.
      units = norm
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        win1 = visual.Window(
            size=[1920, 1080], fullscr=True, screen=2,
            winType='pyglet', allowGUI=False, allowStencil=False,
            monitor='Monitor2', color=[0.208,0.208,0.208], colorSpace='rgb',
            blendMode='avg', useFBO=True, gammaErrorPolicy = 'warn',
            units='pix')

        #strat instructiong
        start_text_m2 = visual.TextStim(win=win1, name='start_text_m2',
            text='Thank you for offering to take part in this experiment.',
            font='Comic Sans',
            units='norm', pos=(0, 0), height=0.1, wrapWidth=None, ori=0,
            color=[-1.000,-1.000,-1.000], colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);


        Instruction_m2 = visual.TextStim(win=win1, name='Instruction_m2',
            text="In the following experiment, you will complete a task in which you will have to communicate a series of pictorial stimuli using only your hands to your partner. \n\nDuring the experiment, you will either take the role of the gesturer or the interpreter. In each trial you will first see a picture on both of your screens. The picture is either the same or not. It will remain on both screens during the trial and provide a background to ease communication with your partner. \n\nThe target picture will only show on the gesturer’s screen, while there will be three different pictures on the interpreter’s screen. Pictures displayed on the interpreter’s screen will only differ in the action that the character performed, the character who performs the action and the object which the character interacts with. \n\nThe task for the interpreter is to confirm whether the shared picture on both screens is the same and to select the target picture based on the gesturer's gestural depiction and the shared picture. The interpreter is allowed to verbally describe the shared picture in confirmation period. but not allowed to produce any speech, gesture or body language during the selection period. \n\nThe task for the gesturer is to depict the target picture with only their hands.   The gesturer should make sure that the interpreter will select the correct picture, relying on the shared picture and using gestures alone. The gesturer is not allowed to produce speech during the experiment. \n\nEach trial will be completed when the interpreter correctly selects the target picture.\n\nPlease kindly inform the experimenter when you are ready.\n",
            font='Arial',
            units='norm', pos=(0, 0), height=0.05, wrapWidth=None, ori=0,
            color=[-1.000,-1.000,-1.000], colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        Pra_Instruction_m2 = visual.TextStim(win=win1, name='Pra_Instruction_m2',
            text='You will now have several practice trials to get familiar with the task.\n\nIn the practice trials, you will take turns to take the role of gesturer and interpreter. In each trial, you will first enter the confirmation period in which you will see a shared picture on both of your screens. The picture is either the same or not. The interpreter will need to verbally describe the picture to confirm with the gesturer whether you are seeing the same picture. The shared picture will remain on both screens during the trial and provide a background to ease communication with your partner. \n\nFor the interpreter. Your task is to verbally describe the shared picture and confirm whether you are having the same picture on both screens in the confirmation period and to guess what the target picture is based on the gesturer’s depiction in the selection period. You would have only one chance to provide the answer, so please be sure about the answer before you press the corresponding button. \n\nFor the gesturer, your task is to confirm with the interpreter that you are having the same shared picture on the screens in the confirmation period and to depict the target picture and make sure that the interpreter will select the correct picture, relying on the shared picture and using gesture alone in the selection period.\n\nPlease do not speak and do not point at any object in the room and the computer screen during other parts of the experiment.\n\nYou will be told what role you are going to take before each trial.\n\nPlease kindly inform the experimenter when you are ready.\n',
            font='Arial',
            units='norm', pos=(0, 0), height=0.05, wrapWidth=None, ori=0,
            color=[-1.000,-1.000,-1.000], colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        end_text = visual.TextStim(win=win1, name='end_text',
            text='Thank you for participating. Please fill in the post-experiment questionnaire on your right-hand side.',
            font='Arial',
            units='norm', pos=(0, 0), height=0.1, wrapWidth=None, ori=0,
            color=[-1.000,-1.000,-1.000], colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);


        ins_conf_2 = visual.TextStim(win=win1, name='ins_conf_2',
            text='Please verbally describe this shared picture.\nPress Y if you are having the same picture on both screens.\nPress N if you are having different pictures.',
            font='Arial',
            units='norm', pos=(0, 0.8), height=0.06, wrapWidth=None, ori=0,
            color=[-1.000,-1.000,-1.000], colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);


        ins_conf_22 = visual.TextStim(win=win1, name='ins_conf_22',
            text='Please respond Yes if you believe you are having the same picture on both screens and No if you are having different pictures.',
            font='Arial',
            units='norm', pos=(0, 0.8), height=0.06, wrapWidth=None, ori=0,
            color=[-1.000,-1.000,-1.000], colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        #TRIALS

        img_pre_1_m2 = visual.ImageStim(
            win=win1,
            name='image_pre_1_m2', units='pix',
            image='sin', mask=None,
            ori=0, pos=(0, 0), size=(936.6, 636.6),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=0.0)


        img_pre_2_m2 = visual.ImageStim(
            win=win1,
            name='image_pre_2_m2', units='pix',
            image='sin', mask=None,
            ori=0, pos=(-480, 0), size=(772.2, 545.4),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=0.0)

        img_ans_1_a_m2 = visual.ImageStim(
            win=win1,
            name='image_ans_1_a_m2', units='pix',
            image='sin', mask=None,
            ori=0, pos=(480, 360), size=(463.32, 327.24),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=0.0)

        img_ans_1_b_m2 = visual.ImageStim(
            win=win1,
            name='image_ans_1_b_m2', units='pix',
            image='sin', mask=None,
            ori=0, pos=(480, 0), size=(463.32, 327.24),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=0.0)

        img_ans_1_c_m2 = visual.ImageStim(
            win=win1,
            name='image_ans_1_c_m2', units='pix',
            image='sin', mask=None,
            ori=0, pos=(480, -360), size=(463.32, 327.24),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=0.0)


        img_pre_3_m2 = visual.ImageStim(
            win=win1,
            name='pra_img_pre_3_m2', units='pix',
            image='sin', mask=None,
            ori=0, pos=(0, 0), size=(936.6, 636.6),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=0.0)


        img_pre_4_m2 = visual.ImageStim(
            win=win1,
            name='pra_img_pre_4_m2', units='pix',
            image='sin', mask=None,
            ori=0, pos=(-480, 0), size=(772.2, 545.4),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=0.0)


        img_tar_compre_1 = visual.ImageStim(
            win=win1,
            name='pra_img_tar_compre_1',
            image='sin', mask=None,
            ori=0, pos=(480, 0), size=(772.2, 545.4),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=-1.0)


        square_win1 = visual.ImageStim(
            win=win1,
            name='square_win1',
            image='Materials/square.png', mask=None,
            ori=0, pos=(480, 0), size=(936.6, 636.6),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=-4.0)

        #Real trial instruction
        real_trial = visual.TextStim(win=win1, name='real_trail',
            text='You will now start the real trial.\n\nYou are going to take the role of the interpreter in the real trial. In each trial, you will first need to verbally describe the shared picture to make sure you are having the same pictures on both screens.\n\nAfter the confirmation period, you will need to select the target picture based on the gesturer\'s depiction and the shared picture. \n\nPlease do not produce any speech, gesture and body language, and do not point at any object in the room and the computer screen during the seletion period.\n\nPlease kindly inform the experimenter when you are ready.',
            font='Arial',
            units='norm', pos=(0, 0), height=0.05, wrapWidth=None, ori=0,
            color=[-1.000,-1.000,-1.000], colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);


        #Selection
        text_N = visual.TextStim(win=win1, name='text_N',
            text='N',
            font='Arial',
            units='pix', pos=(100, -360), height=50, wrapWidth=None, ori=0,
            color=[-1.000,-1.000,-1.000], colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=-7.0);
        text_J = visual.TextStim(win=win1, name='text_J',
            text='J',
            font='Arial',
            units='pix', pos=(100, 0), height=50, wrapWidth=None, ori=0,
            color=[-1.000,-1.000,-1.000], colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=-6.0);
        text_U = visual.TextStim(win=win1, name='text_U',
            text='U',
            font='Arial',
            units='pix', pos=(100, 360), height=50, wrapWidth=None, ori=0,
            color=[-1.000,-1.000,-1.000], colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=-8.0);

        trial_num = 0


        text_role_g_win1 = visual.TextStim(win=win1, name='text_r_g_1',
            text='You will be the gesturer in this trial',
            font='Arial',
            units='norm', pos=(0, -0), height=0.1, wrapWidth=None, ori=0,
            color=[-1.000,-1.000,-1.000], colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=-7.0);


        text_role_i_win1 = visual.TextStim(win=win1, name='text_r_i_1',
            text='You will be the interpreter in this trial',
            font='Arial',
            units='norm', pos=(0, -0), height=0.1, wrapWidth=None, ori=0,
            color=[-1.000,-1.000,-1.000], colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=-7.0);
      Begin Routine:
        start_text_m2.setAutoDraw(True)
      Each Frame:
        win1.flip()
      End Routine:
        start_text_m2.setAutoDraw(False)
        win1.flip()
  Routine Instruction
    TextComponent Instruction_m1
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
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      text:
        In the following experiment, you will complete a task in which you will have to communicate a series of pictorial stimuli using only your hands to your partner.

        During the experiment, you will either take the role of the gesturer or the interpreter. In each trial you will first see a picture on both of your screens. The picture is either the same or not. It will remain on both screens during the trial and provide a background to ease communication with your partner.

        The target picture will only show on the gesturer’s screen, while there will be three different pictures on the interpreter’s screen. Pictures displayed on the interpreter’s screen will only differ in the action that the character performed, the character who performs the action and the object which the character interacts with.

        The task for the interpreter is to confirm whether the shared picture on both screens is the same and to select the target picture based on the gesturer's gestural depiction and the shared picture. The interpreter is allowed to verbally describe the shared picture in confirmation period. but not allowed to produce any speech, gesture or body language during the selection period.

        The task for the gesturer is to depict the target picture with only their hands.   The gesturer should make sure that the interpreter will select the correct picture, relying on the shared picture and using gestures alone. The gesturer is not allowed to produce speech during the experiment.

        Each trial will be completed when the interpreter correctly selects the target picture.

        Please kindly inform the experimenter when you are ready.
    CodeComponent code_6
      Code Type = Py
      Begin Experiment:
        import numpy as np
        import os
        import cv2

        trial_num = 1

        path_file = 'F:\\Experiment\\SGPV2_Interaction\\SGPV_Communicative\\data\\' + str(expInfo['participant'])

        isExists=os.path.exists(path_file)

        if not isExists:
            os.makedirs(path_file)
      Begin Routine:
        Instruction_m2.setAutoDraw(True)
      Each Frame:
        win1.flip()
      End Routine:
        Instruction_m2.setAutoDraw(False)
        win1.flip()
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine Web_cam_check
    ImageComponent web_cam_check_1
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent instruction_webcam_checkm1
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine perivew
    ImageComponent img_pv_1
      image [set every repeat] = $preview
      size = (936.6, 636.6)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        img_pre_1_m2.setImage(preview_2)
        img_pre_1_m2.setAutoDraw(True)
        ins_conf_2.setAutoDraw(True)
      Each Frame:
        win1.flip()
      End Routine:
        img_pre_1_m2.setAutoDraw(False)
        ins_conf_2.setAutoDraw(False)
        win1.flip()
    KeyboardComponent key_resp_13
      allowedKeys = 'y','n','right'
      correctAns = $congruency
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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    TextComponent text_18
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.06
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Please respond Yes if you believe you are having the same picture on both screens and No if you are having different pictures.
      units = norm
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  Routine preview_2
    ImageComponent img_pv_2
      image [set every repeat] = $img_pre_2
      size = (1287, 909)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        img_pre_3_m2.setImage(img_pre_2)
        img_pre_3_m2.setAutoDraw(True)
      Each Frame:
        win1.flip()
      End Routine:
        img_pre_3_m2.setAutoDraw(False)
        win1.flip()
  Routine End
    TextComponent text_14
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Thank you for participating. Please fill in the post-experiment questionnaire and video-consent form on your left-hand side. 
      units = norm
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    KeyboardComponent key_resp_11
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_17
      Code Type = Py
      Begin Routine:
        end_text.setAutoDraw(True)
      Each Frame:
        win1.flip()
      End Routine:
        end_text.setAutoDraw(False)
  Routine pause
    TextComponent text_2
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
      units = norm
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  Routine pra_preview
    ImageComponent pra_img_pre_1
      image [set every repeat] = $img_pre_1
      size = (936.6, 636.6)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_12
      allowedKeys [set every repeat] = 'y','n','right'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent text_16
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.06
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = Please respond Yes if you believe you are having the same picture on both screens and No if you are having different pictures.
      units = norm
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    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        img_pre_1_m2.setImage(img_pre_11)
        img_pre_1_m2.setAutoDraw(True)
        ins_conf_2.setAutoDraw(True)
      Each Frame:
        win1.flip()
      End Routine:
        img_pre_1_m2.setAutoDraw(False)
        ins_conf_2.setAutoDraw(False)
        win1.flip()
  Routine pra_descri_1
    ImageComponent pra_im_pre_a1
      image [set every repeat] = $img_pre_1
      pos = (-480, 0)
      size = (772.2, 545.4)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent pra_img_tar_descri_1
      image [set every repeat] = $img_tar_1
      pos = (480, 0)
      size = (772.2, 545.4)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_7
      allowedKeys [set every repeat] = 'u','j','n'
      correctAns = $
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        img_pre_2_m2.setImage(img_pre_11)
        img_ans_1_a_m2.setImage(img_ans_a_1)
        img_ans_1_b_m2.setImage(img_ans_b_1)
        img_ans_1_c_m2.setImage(img_ans_c_1)
        img_pre_2_m2.setAutoDraw(True)
        img_ans_1_a_m2.setAutoDraw(True)
        img_ans_1_b_m2.setAutoDraw(True)
        img_ans_1_c_m2.setAutoDraw(True)
        text_N.setAutoDraw(True)
        text_J.setAutoDraw(True)
        text_U.setAutoDraw(True)
      Each Frame:
        win1.flip()
      End Routine:
        img_pre_2_m2.setAutoDraw(False)
        img_ans_1_a_m2.setAutoDraw(False)
        img_ans_1_b_m2.setAutoDraw(False)
        img_ans_1_c_m2.setAutoDraw(False)
        text_N.setAutoDraw(False)
        text_J.setAutoDraw(False)
        text_U.setAutoDraw(False)
        win1.flip()
    ImageComponent square
      image = Materials/square.png
      pos = (480, 0)
      size = (936.6, 636.6)
      startVal [time (s)] = 0.0
      units = pix
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  Routine descri_1
    ImageComponent im_pre_a1
      image [set every repeat] = $preview
      pos = (-480, 0)
      size = (772.2, 545.4)
      startVal [time (s)] = 0.0
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    ImageComponent img_tar_descri_1
      image [set every repeat] = $target_path
      pos = (480, 0)
      size = (772.2, 545.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'u','j','n','right'
      correctAns = $Correct_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        img_pre_2_m2.setImage(preview_2)
        img_ans_1_a_m2.setImage(ans1_path)
        img_ans_1_b_m2.setImage(ans2_path)
        img_ans_1_c_m2.setImage(ans3_path)
        img_pre_2_m2.setAutoDraw(True)
        img_ans_1_a_m2.setAutoDraw(True)
        img_ans_1_b_m2.setAutoDraw(True)
        img_ans_1_c_m2.setAutoDraw(True)
        text_N.setAutoDraw(True)
        text_J.setAutoDraw(True)
        text_U.setAutoDraw(True)


        cap = cv2.VideoCapture(1 + cv2.CAP_DSHOW)
        cap.set(cv2.CAP_PROP_FRAME_WIDTH, 1280)
        cap.set(cv2.CAP_PROP_FRAME_HEIGHT, 720)

        path_video = 'F:\\Experiment\\SGPV2_Interaction\\SGPV_Communicative\\data\\' + expInfo['participant'] + '\\' + expInfo['participant'] + '_' + str(trial_num) + '_' + str(thisTrial['Item_number']) + '.avi'
        trial_num = trial_num + 1


        fourcc = cv2.VideoWriter_fourcc(*'XVID')
        out = cv2.VideoWriter(path_video,fourcc, 30.0, (1280,720))
      Each Frame:
        ret, frame1 = cap.read()
        out.write(frame1)
        win1.flip()
      End Routine:
        img_pre_2_m2.setAutoDraw(False)
        img_ans_1_a_m2.setAutoDraw(False)
        img_ans_1_b_m2.setAutoDraw(False)
        img_ans_1_c_m2.setAutoDraw(False)
        text_N.setAutoDraw(False)
        text_J.setAutoDraw(False)
        text_U.setAutoDraw(False)
        cap.release()
        out.release()
        del cap
        del out
        cv2.destroyAllWindows()
        win1.flip()
    ImageComponent square_trails
      image [set every repeat] = Materials/square.png
      pos = (480, 0)
      size = (936.6, 636.6)
      startVal [time (s)] = 0.0
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  Routine compre_1
    TextComponent text_5
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 50
      pos = (100, -360)
      startVal [time (s)] = 0.0
      text = N
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    TextComponent text_4
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 50
      pos = (100, 0)
      startVal [time (s)] = 0.0
      text = J
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    TextComponent text_3
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 50
      pos = (100, 360)
      startVal [time (s)] = 0.0
      text = U
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    ImageComponent img_pre_a2
      image [set every repeat] = $img_pre_2
      pos = (-480, 0)
      size = (772.2, 545.4)
      startVal [time (s)] = 0.0
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    ImageComponent img_ans4
      image [set every repeat] = $img_ans_a_2
      pos = (480, 360)
      size = (463.32, 327.24)
      startVal [time (s)] = 0.0
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    ImageComponent img_ans5
      image [set every repeat] = $img_ans_b_2
      pos = (480, 0)
      size = (463.32, 327.24)
      startVal [time (s)] = 0.0
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    ImageComponent img_ans6
      image [set every repeat] = $img_ans_c_2
      pos = (480,-360)
      size = (463.32, 327.24)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'u','j','n','right'
      correctAns = $Corret2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        img_pre_4_m2.setImage(img_pre_2)
        img_tar_compre_1.setImage(img_tar_2)
        img_pre_4_m2.setAutoDraw(True)
        img_tar_compre_1.setAutoDraw(True)
        square_win1.setAutoDraw(True)

        cap = cv2.VideoCapture(1 + cv2.CAP_DSHOW)
        cap.set(cv2.CAP_PROP_FRAME_WIDTH, 1280)
        cap.set(cv2.CAP_PROP_FRAME_HEIGHT, 720)

        path_video = 'E:\\SGPV_Interaction\\data\\' + expInfo['participant'] + '\\' + str(trial_num) + '_' + 'p2' + '.avi'
        trial_num = trial_num + 1


        fourcc = cv2.VideoWriter_fourcc(*'XVID')
        out = cv2.VideoWriter(path_video,fourcc, 30.0, (1280,720))
      Each Frame:
        ret, frame1 = cap.read()
        out.write(frame1)
        win1.flip()
      End Routine:
        img_pre_4_m2.setAutoDraw(False)
        img_tar_compre_1.setAutoDraw(False)
        square_win1.setAutoDraw(False)
        cap.release()
        out.release()
        del cap
        del out
        cv2.destroyAllWindows()
  Routine webcam_check1
    ImageComponent Videomonitor1
      flipVert = True
      image = None
      size = (1280, 720)
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        video = cv2.VideoCapture(1 + cv2.CAP_DSHOW)
        video.set(cv2.CAP_PROP_FRAME_WIDTH, 1280)
        video.set(cv2.CAP_PROP_FRAME_HEIGHT, 720)
      Each Frame:
        returnVal, frame = video.read()
        frame = cv2.cvtColor(frame, cv2.COLOR_BGR2RGB)/255.0
        Videomonitor1.image = frame
        Videomonitor1.draw()
        win.flip()
      End Routine:
        video.release()
    KeyboardComponent key_resp_6
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_8
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Check Camera 1 
      units = norm
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  Routine pra_preview_2
    ImageComponent pra_img_pre_2
      image [set every repeat] = $img_pre_2
      size = (936.6, 636.6)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code_11
      Code Type = Py
      Begin Routine:
        img_pre_3_m2.setImage(img_pre_22)
        img_pre_3_m2.setAutoDraw(True)
        ins_conf_22.setAutoDraw(True)
      Each Frame:
        win1.flip()
      End Routine:
        img_pre_3_m2.setAutoDraw(False)
        ins_conf_22.setAutoDraw(False)
        win1.flip()
    TextComponent text_17
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.06
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Please verbally describe this shared picture.

        Press Y if you are having the same picture on both screens.

        Press N if you are having different pictures
    KeyboardComponent key_resp_14
      allowedKeys [set every repeat] = 'y','n','right'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine pra_compre_2
    ImageComponent pra_img_pre_a2
      image [set every repeat] = $img_pre_2
      pos = (-480, 0)
      size = (772.2, 545.4)
      startVal [time (s)] = 0.0
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    ImageComponent pra_img_ans4
      image [set every repeat] = $img_ans_a_2
      pos = (480, 360)
      size = (463.32, 327.24)
      startVal [time (s)] = 0.0
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    ImageComponent pra_img_ans5
      image [set every repeat] = $img_ans_b_2
      pos = (480, 0)
      size = (463.32, 327.24)
      startVal [time (s)] = 0.0
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    ImageComponent pra_img_ans6
      image [set every repeat] = $img_ans_c_2
      pos = (480, -360)
      size = (463.32, 327.24)
      startVal [time (s)] = 0.0
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    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        img_pre_4_m2.setImage(img_pre_22)
        img_tar_compre_1.setImage(img_tar_2)
        img_pre_4_m2.setAutoDraw(True)
        img_tar_compre_1.setAutoDraw(True)
        square_win1.setAutoDraw(True)
      Each Frame:
        win1.flip()
      End Routine:
        img_pre_4_m2.setAutoDraw(False)
        img_tar_compre_1.setAutoDraw(False)
        square_win1.setAutoDraw(False)
        win1.flip()
    KeyboardComponent key_resp_8
      allowedKeys [set every repeat] = 'u','j','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 50
      pos = (100, 360)
      startVal [time (s)] = 0.0
      text = U
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    TextComponent text_6
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 50
      pos = (100, 0)
      startVal [time (s)] = 0.0
      text = J
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    TextComponent text_7
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 50
      pos = (100, -360)
      startVal [time (s)] = 0.0
      text = N
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  Routine Real_trial_instruction
    TextComponent text_10
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
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      text:
        You will now start the real trial.

        You are going to take the role of the gesturer in the real trial. In each trial, you will first see a shared picture on both of your screens. The picture is either the same or not. You will first need to confirm with the interpreter whether you are seeing the same picture by answering yes or no in the confirmation period.

        After the confirmation period, your task is to depict the target picture and make sure that the interpreter will select the correct picture, relying on the shared picture and using gesture alone

        Please be aware that pictures displayed on the interpreter’s screen will only differ in the action that the character performs, the character who performs the action and the object which the character interacts with. The information provided in the shared picture will remain the same across the different pictures on the interpreter’s screen.

        Please do not produce any speech and do not point at any object in the room and the computer screen during the experiment.

        Please kindly inform the experimenter when you are ready.
    KeyboardComponent key_resp_9
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 3
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    CodeComponent code_13
      Code Type = Py
      Begin Routine:
        real_trial.setAutoDraw(True)
      Each Frame:
        win1.flip()
      End Routine:
        real_trial.setAutoDraw(False)
        win1.flip()
  Routine webcam_check2_2
    ImageComponent Videomonitor2
      flipVert = True
      image = None
      size = (1280, 720)
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        video2 = cv2.VideoCapture(1 + cv2.CAP_DSHOW)
        video2.set(cv2.CAP_PROP_FRAME_WIDTH, 1280)
        video2.set(cv2.CAP_PROP_FRAME_HEIGHT, 720)
      Each Frame:
        returnVal2, frame2 = video2.read()
        frame2 = cv2.cvtColor(frame2, cv2.COLOR_BGR2RGB)/255.0
        Videomonitor2.image = frame2
        Videomonitor2.draw()
        win.flip()
      End Routine:
        video2.release()
    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_9
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = check camera 2
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  Routine reminder
    TextComponent text_11
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You will be the gesturer in this trial.
      units = norm
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    CodeComponent code_14
      Code Type = Py
      Begin Routine:
        text_role_i_win1.setAutoDraw(True)
      Each Frame:
        win1.flip()
      End Routine:
        text_role_i_win1.setAutoDraw(False)
  Routine reminder_2
    TextComponent text_12
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You will be the interpreter in this trial.
      units = norm
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    CodeComponent code_15
      Code Type = Py
      Begin Routine:
        text_role_g_win1.setAutoDraw(True)
      Each Frame:
        win1.flip()
      End Routine:
        text_role_g_win1.setAutoDraw(False)
  Routine Pra_ins
    TextComponent text_13
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
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      text:
        You will now have several practice trials to get familiar with the task.

        In the practice trials, you will take turns to take the role of gesturer and interpreter. In each trial, you will first enter the confirmation period in which you will see a shared picture on both of your screens. The picture is either the same or not. The interpreter will need to verbally describe the picture to confirm with the gesturer whether you are seeing the same picture. The shared picture will remain on both screens during the trial and provide a background to ease communication with your partner.

        For the interpreter. Your task is to verbally describe the shared picture and confirm whether you are having the same picture on both screens in the confirmation period and to guess what the target picture is based on the gesturer’s depiction in the selection period. You would have only one chance to provide the answer, so please be sure about the answer before you press the corresponding button.

        For the gesturer, your task is to confirm with the interpreter that you are having the same shared picture on the screens in the confirmation period and to depict the target picture and make sure that the interpreter will select the correct picture, relying on the shared picture and using gesture alone in the selection period.

        Please do not speak and do not point at any object in the room and the computer screen during other parts of the experiment.

        You will be told what role you are going to take before each trial.

        Please kindly inform the experimenter when you are ready.
    KeyboardComponent key_resp_10
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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    CodeComponent code_16
      Code Type = Py
      Begin Routine:
        Pra_Instruction_m2.setAutoDraw(True)
      Each Frame:
        win1.flip()
      End Routine:
        Pra_Instruction_m2.setAutoDraw(False)
Flow
  Routine Start
  Routine Instruction
  Routine webcam_check1
  Routine Pra_ins
  LoopInitiator pratice loopType="TrialHandler"
    conditionsFile = practice_communicaitve_reduced.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Context1', 1), ('tar_actor1', 2), ('sup_actor1', 0), ('Action1', 2), ('tar_patient1', 3), ('sup_patient', 1), ('Condition1', 2), ('Reverse1', 'l'), ('Correct1', 1), ('img_pre_1', 'Materials\\1_0_3_0_1_0_n_l.png'), ('img_pre_11', 'Materials\\1_0_3_0_1_0_n_l.png'), ('img_tar_1', 'Materials\\1_2_3_2_1_0_n_l.png'), ('img_ans_a_1', 'Materials\\1_2_3_2_1_0_n_l.png'), ('img_ans_b_1', 'Materials\\1_2_1_2_3_0_n_r.png'), ('img_ans_c_1', 'Materials\\1_2_3_4_1_0_n_l.png'), ('Condition_1', 2), ('Context2', 1), ('tar_actor2', 2), ('sup_actor2', 0), ('Action2', 4), ('tar_patient2', 4), ('sup_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,
      OrderedDict([('Context1', 3), ('tar_actor1', 3), ('sup_actor1', 0), ('Action1', 3), ('tar_patient1', 2), ('sup_patient', 4), ('Condition1', 3), ('Reverse1', 'r'), ('Correct1', 3), ('img_pre_1', 'Materials\\3_0_0_0_4_0_n_r.png'), ('img_pre_11', 'Materials\\2_0_0_0_1_0_n_r.png'), ('img_tar_1', 'Materials\\3_3_2_3_4_0_n_r.png'), ('img_ans_a_1', 'Materials\\3_1_2_3_4_0_n_r.png'), ('img_ans_b_1', 'Materials\\3_3_4_3_2_0_n_l.png'), ('img_ans_c_1', 'Materials\\3_3_2_3_4_0_n_r.png'), ('Condition_1', 3), ('Context2', 2), ('tar_actor2', 3), ('sup_actor2', 0), ('Action2', 2), ('tar_patient2', 4), ('sup_p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
    Routine reminder
    Routine pra_preview
    Routine pra_descri_1
    Routine pause
    Routine reminder_2
    Routine pra_preview_2
    Routine pra_compre_2
    Routine pause
  LoopTerminator pratice
  Routine Real_trial_instruction
  Routine webcam_check1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $"Stimuli_total_" + expInfo["Stimuli1"] + "_revised.csv"
    loopType = sequential
    nReps = 1
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    Routine perivew
    Routine descri_1
    Routine pause
  LoopTerminator trials
  Routine Real_trial_instruction
  Routine webcam_check1
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = $"Stimuli_total_" + expInfo["Stimuli2"] + "_revised.csv"
    loopType = sequential
    nReps = 1
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    Routine perivew
    Routine descri_1
    Routine pause
  LoopTerminator trials_2
  Routine End
